////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
//A simple tool to aid in the manual tracking of fluorescently labeled cells through mitosis and in the processing of the tracking data
//The cells/objects are tracked in relation to a defined targetROI (e.g. A Hair Follicle Condensate)
//Installation: Place Mitosis_Tools.ijm in /fiji/macros/toolsets and restart
//Results are recorded in the same format as the manual tracking tool (http://rsbweb.nih.gov/ij/plugins/track/track.html)
//THE SOFTWARE IS PROVIDED "AS IS", WITHOUT WARRANTY OF ANY KIND - please refer to the separate license 

//Tracking:

//	Initialize Action Tool - Initializes the tracking. Specifies the position of the traget ROI.
//	Manual Track Tool - Allows manual tracking of individual cells
//	Adding a track changes the source number 1, 2, 3, 4 etc use this to start tracking a mother
//	Adding a mitosis splits the track into daughters a and b (1a, 1b,does not yet support multiple mitoses)
//	Switch Daughter to finsh tracking daughter a and start tracking daughter b

//Processing:

//	Add Summary Stats Action Tool 	- Summarises the tracking data in the same results table
//	Align Tracks Action Tool 		- Aligns tracks in the log with the mitosis point at 0 - mothers behind and daughters ahead RUM SUMMARY STATS FIRST

////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////

//Global variables for cell tracking
var gtrack = 1;
var number = 1;

//Global variables for mitosis tracking
var is_seed = true;//are we on a seed track or a daughter track?
var daughter = "";//this is either a or b and is appended to gtrack in the results table
var mitosis_frame = "";//remember when the mitosis happened so we can go back to track the second daughter
var mitosis_x = 0; //remember where the mitosis happened so we can go back to track the second daughter
var mitosis_y = 0; //remember where the mitosis happened so we can go back to track the second daughter
var mitosis = "";//string to print to table
var last_line = "";//keep record of last entry in table
var posx = 0;//position you click
var posy = 0;//position you click

//Global calibration variables
var time_step = 10;//this is the image acquisition rate in minutes
var cal = 0.619;//This is the resolution of the image in micron/px

//Global variables for ROI tracking
var track_roi = false;
var shortest = 100000;
var	xpoints = newArray();//the extent of the ROI
var ypoints = newArray();//the extent of the ROI

var f = "";

var count = 1;
var Image = "";
var x_values = newArray();
var y_values = newArray();
var roi_n = 0;
var com_roi_x = 0; 
var com_roi_y = 0; 

var sample = 5;
var Image = "";
var dir = "";
var tdir = getDirectory("temp");
	
var angle = 0;
var euc_dis = 0;
var step = 6;//the size of the window in time steps
var rcells = false;
var dCmds = newMenu("Data Operations Menu Tool", newArray("Add Summary Stats", "Align Tracks"));

macro "Initialize Action Tool - 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"
{

//Force 8-bit
	run("8-bit");
	run("Green");
	run("Enhance Contrast", "saturated=0.35");
	
//Must be set up for black background
	run("Options...", "iterations=1 count=1 black edm=Overwrite do=Nothing");///////////////////////////////////////////////////////////////////////////////////NEED THIS?????????????????????????????????

//remove scale if any
	run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
	run("Remove Overlay");

	Image = getTitle();
	dir = File.directory();
	gtrack = 1;
	number = 1;
	count = 1;
	daughter = "";
	getDimensions(width, height, channels, slices, frames);

	if (frames > slices) {
		run("Re-order Hyperstack ...", "channels=[Channels (c)] slices=[Frames (t)] frames=[Slices (z)]");
	}

	getDimensions(width, height, channels, slices, frames);

//prompt for calibration of image
	Dialog.create("Please set calibration values");
	Dialog.addNumber("Time Step (min):", 2);
	Dialog.addNumber("Scale (um/px):", 0.619);
	Dialog.addCheckbox("Find random cells?", false);
	Dialog.addNumber("Number of random cells:", 5);
	Dialog.addCheckbox("Track ROI?", false);
	Dialog.show();
	time_step = Dialog.getNumber();
	cal = Dialog.getNumber();
	rcells = Dialog.getChoice();
	sample = Dialog.getNumber();
	track_roi = Dialog.getChoice();

if (track_roi == true) {

//Promt user to define the hair follicle targetROI in the finale frame
		run("Colors...", "foreground=white background=black selection=cyan");///////////////////////////////////////////////////////////////////////////////////NEED THIS?????????????????????????????????
		setSlice(slices);
		run("Select None");
		setTool("oval");
		waitForUser("Select ROI", "Please outline the target ROI and press OK");

//Only if ROI tracking is ticked//////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////



//save snapshots frame 1 and last
		run("Select None");
		setSlice(1);
		run("Duplicate...", " ");
		run("Restore Selection");
		run("RGB Color");
		run("Colors...", "foreground=red background=red selection=red");
		run("Draw");
		run("Select None");
		saveAs("Tiff", dir+Image+"_ROI_First.tif");
		run("Close");
		run("Select None");
		setSlice(slices);
		run("Duplicate...", " ");
		run("Restore Selection");
		run("RGB Color");
		run("Colors...", "foreground=red background=red selection=red");
		run("Draw");
		run("Select None");
		saveAs("Tiff", dir+Image+"_ROI_Last.tif");
		run("Close");

//get the skeleton of the target ROI
		selectWindow(Image);
		run("Restore Selection");

		if (isOpen("Results")){
			selectWindow("Results");
			run("Close");
		}

//get all the x and y positions of the pixels in the selection 
		getSelectionBounds(x0, y0, width, height); 

		for (y=y0; y<y0+height; y++) {
  			for (x=x0; x<x0+width; x++) { 
    			if (selectionContains(x, y)){ 
   		  			x_values = Array.concat(x_values, x);
   		  			y_values = Array.concat(y_values, y);
   		  		}
  			} 
		}	

		get_skel_xy(Image);

//add to the saved images
		open(dir+Image+"_ROI_First.tif");
		run("Restore Selection");
		run("Colors...", "foreground=yellow background=black selection=red");
		run("Draw");
		run("Select None");
		saveAs("Tiff", dir+Image+"_ROI_First.tif");
		run("Close");

		open(dir+Image+"_ROI_Last.tif");
		run("Restore Selection");
		run("Colors...", "foreground=yellow background=black selection=red");
		run("Draw");
		run("Select None");
		saveAs("Tiff", dir+Image+"_ROI_Last.tif");
		run("Close");

//save log of coordinates
		print("X Values");
		Array.print(x_values);
		print("Y Values");
		Array.print(y_values);
		selectWindow("Log");
		saveAs("Text", dir+Image+"Selection_Coordinates.txt");

		if (isOpen("Log")){
			selectWindow("Log");
			run("Close");
		}

}

//Only if ROI tracking is ticked//////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////

	if (rcells == true) {
	//add all cells to the manager in order to choose random cells

		if (isOpen("ROI Manager")){
			selectWindow("ROI Manager");
			run("Close");
		}

		run("Select None");
		setSlice(1);
		run("Select All");
		run("Copy");
		run("Select None");
		run("Internal Clipboard");
		run("8-bit");
		run("Gaussian Blur...", "sigma=1");
		run("Find Maxima...", "noise=15 output=[Point Selection]");
		getDimensions(width, height, channels, slices, frames);

		newImage("Untitled", "8-bit black", width, height, 1);
		run("Colors...", "foreground=white background=black selection=cyan");
		run("Restore Selection");
		run("Draw");
		run("Make Binary");
//run("Invert");//////////////////////////////////////////////////////////////////////////////////////////////////CHECK YOU NEED THIS LINE ON YOUR SETUP
		run("Analyze Particles...", "exclude add");

		selectWindow(Image);
		roiManager("Show All");

		if (isOpen("Clipboard")){
			selectWindow("Clipboard");
			run("Close");
		}

		if (isOpen("Untitled")){
			selectWindow("Untitled");
			run("Close");
		}

//randomly select 20 ROIS
		run("Set Measurements...", "center redirect=None decimal=4");
		roiManager("Select All");
		roiManager("Measure");

//make sure there are enough ROIS in the manager
		cells = roiManager("count");

		if (sample > cells) {sample = cells;} else {}


		if (isOpen("ROI Manager")) {
   		 	selectWindow("ROI Manager");
   		 	run("Close");
		}

		k=0; 
		n=nResults(); 
		rois=newArray(n); 

		for(i=0;i<n;i++) {//These curly brackets were not closed on 150517**********************************************************************
   		 	rois[i]=k++;
		} 

//need to check that if there are less than roi_n cells it just selects all
		myFisherYates(rois); 

		count=1; 
		for(i=0;i<sample;i++) { 
    		x = getResult("XM", rois[i]); 
    		y = getResult("YM", rois[i]); 
   		 	makePoint(x, y);
   		 	roiManager("Add");  
  	 } 

		if (isOpen("Results")) {
    		selectWindow("Results");
    		run("Close");
		}

		selectWindow(Image);
		roiManager("Show None");

		roiManager("Select", roi_n);/////is it missing the first one?
		run("Enlarge...", "enlarge=10");
	}
	run("Select None");
	setSlice(1);

	run("Colors...", "foreground=white background=white selection=cyan");
}

macro "Manual Track Tool - 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" 
{

//run("Restore Selection");

//check there is a selection, if not ask to press the new track button
   // type = selectionType();
   // if (type == -1) {exit("There is no selection have you initialised the image?");}

//some variables
	dist = 0;
	track = toString(gtrack)+toString(daughter);
    slice = getSliceNumber(); 
    width = getWidth();
    height = getHeight();
    cell_area = 0;
    cell_feret = 0;
    cell_circ = 0;

//draws the tracking table
    requires("1.41g");
	title1 = Image+"_Tracking Table";
	title2 = "["+title1+"]";
	f = title2;

	if (isOpen(title1)) {
	}
		else {
			run("Table...", "name="+title2+" width=1000 height=300");
			print(f, "\\Headings: \tImage_ID\tTrack\tSeed\tFrame\tSlice\tCh\tX\tY\tFollicle_COMX\tFollicle_COMY\tDistance_from_COM_(um)\tInside?\tArea\tFeret\tCirc.");
		}

	//run("Colors...", "foreground=white background=white selection=cyan");
    autoUpdate(false);
    getCursorLoc(x, y, z, flags);
    //makePoint(x, y);
    makeOval(x-1,y-1,3,3);
	run("Add Selection...");
	makePoint(x, y);
    wait(300);
    //run("Colors...", "foreground=white background=white selection=red");
    run("Enlarge...", "enlarge=5");

	setBatchMode(true);

//get nearest distance to the skeleton
	
	if (track_roi == true) {
		posx = x;
		posy = y;
		get_s_dist(x, y, xpoints, ypoints, cal);
    	dist = shortest;
	}
	
//get morphology values in array
	morphology_values = newArray();
	morphology_values = get_cell_properties(x, y);

//get morphology
	cell_area = morphology_values[0];
	cell_feret = morphology_values[1];
	cell_circ = morphology_values[2];
	
//get centre of mass 
	com_x = morphology_values[3];
	com_y = morphology_values[4];

// Clear old Results if open
    if (isOpen("Results")) {
        selectWindow("Results");
        run("Close");
    }

	setBatchMode(false);
	
//is the xy position within the tracked ROI at this time point?
    inside = "No";
	
	if (track_roi == true) {
	
  	  for (i = 0; i < x_values.length; i++) {
    	   if ((x == x_values[i]) && (y == y_values[i])) {inside = "Yes";} else {}
    	}

	}
    
//Print to the results table    
    print(f,(number++)+"\t"+Image+"\t"+track+"\t"+is_seed+"\t"+(slice)+"\t"+"1"+"\t"+"1"+"\t"+(com_x)+"\t"+(com_y)+"\t"+(com_roi_x)+"\t"+(com_roi_y)+"\t"+dist+"\t"+inside+"\t"+cell_area+"\t"+cell_feret+"\t"+cell_circ);
	last_line = ""+(slice)+"\t"+"1"+"\t"+"1"+"\t"+(com_x)+"\t"+(com_y)+"\t"+(com_roi_x)+"\t"+(com_roi_y)+"\t"+dist+"\t"+inside+"\t"+cell_area+"\t"+cell_feret+"\t"+cell_circ;
	
	
//advance to next slice
	selectWindow(Image);
    run("Next Slice [>]");
    makeOval(x-12.5, y-12.5, 25, 25);
    
}

macro "Add Track Action Tool - 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"
{
//You do not need to click it before you start tracking the first cell as gtrack is set to 1 in the first instance

	run("Remove Overlay");
	run("Select None");
	run("Colors...", "foreground=white background=white selection=cyan");

	if (rcells == true) {
//randomly make a slection from manager

		if (roi_n < (roiManager("count"))-1) {
  		  		roi_n = roi_n + 1;
  	  	} 
   		 	   else {
   		 	   	exit("You have tracked all the selected cells");
   		 	   }

		roiManager("Select", roi_n);
		run("Enlarge...", "enlarge=10");
    	//setTool("rectangle");
	}
    gtrack++;
	is_seed = true;//are we on a seed track or a daughter track?
 	daughter = "";//this is either a or b and is appended to gtrack in the results table
	mitosis_frame = 0;//remember when the mitosis happened so we can go back to track the second daughter
	mitosis = "";//forget this string
    waitForUser("A new track ("+gtrack+") has been added to the analysis. Please select the tracking button and continue");
    setSlice(1);
}

macro "Add Mitosis Action Tool - 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"
{
	
	is_seed = false;//are we on a seed track or a daughter track?
	if (daughter == "") {
		daughter = "a";//this is either a or b and is appended to gtrack in the results table
		run("Colors...", "foreground=white background=white selection=red");
	} else if (daughter == "a"){
		daughter = "b";
		run("Colors...", "foreground=white background=white selection=yellow");
	}
	mslice = getSliceNumber();
	mitosis_frame = mslice;//remember when the mitosis happened so we can go back to track the second daughter
	mitosis_x =	posx;
	mitosis_y = posy;
	waitForUser("A mitosis has been recorded and the track has switched to "+gtrack+daughter);

	//get the last line of the table to use as the first timepoint
	mitosis = last_line;
}

macro "Switch Daughter Action Tool - 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"
{
	run("Colors...", "foreground=white background=white selection=yellow");
	setSlice(mitosis_frame);
	makePoint(mitosis_x, mitosis_y);
    //run("Colors...", "foreground=white background=white selection=cyan");
    run("Enlarge...", "enlarge=15");

	if (daughter == "") {
		daughter = "a";//this is either a or b and is appended to gtrack in the results table
	} else if (daughter == "a"){
		daughter = "b";
	}
	waitForUser("The track has switched to "+gtrack+daughter);
}

macro "Reanalyze Action Tool - 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" {

//Re-run an analysis using the x,y coordinates in the results table
//Requires an open results table and the corresponding image

//Check for results table
	if (!isOpen("Results")) {
    		exit("There is no Results table open");
	}

//Check that image title matches the "Image_ID" entry in Results table
	testID = getTitle();
	dataID = getResultString("Image_ID", 1);

	if (testID != dataID) {
    		choice = getBoolean("The Image name does not match the ImageID in the results table. Continue?");
    		if (!choice) exit("Please load matching datasets");
	}

//Get dimensions
	Stack.getDimensions(width, height, channels, slices, frames);

//Requires ImageJ 1.41g or later
	requires("1.41g");

//Get image title
	imgTitle = getTitle();
	title1 = imgTitle + "_Tracking Table";
	title2 = "[" + title1 + "]";
	f = title2;

//Create the output table only if it’s not already open
	if (!isOpen(title1)) {
    		run("Table...", "name=" + title2 + " width=1000 height=300");
    		print(f, "\\Headings:\tImage_ID\tTrack\tSeed\tFrame\tSlice\tCh\tX\tY\tOld_X\tOld_Y\tFollicle_COMX\tFollicle_COMY\tDistance_from_COM_(um)\tInside?\tArea\tFeret\tCirc.");
	}

//Store original x,y,frame values in arrays
	old_x_values = newArray();
	old_y_values = newArray();
	old_frames   = newArray();

	for (i=0; i<nResults; i++) {
    		x = getResult("X", i);	
    		y = getResult("Y", i);
    		fr = getResult("Frame", i);
    		old_x_values = Array.concat(old_x_values, x);
    		old_y_values = Array.concat(old_y_values, y);
    		old_frames   = Array.concat(old_frames, fr);
	}

//Save and close the original Results table
	dir = File.directory();
	selectWindow("Results");
	saveAs("Results", dir+"Results.csv");
	close("Results");

//Arrays to store new measurements
	new_areas = newArray();
	new_feret = newArray();
	new_circs = newArray();
	new_com_x = newArray();
	new_com_y = newArray();

//Perform measurements in batch mode
	setBatchMode(true);

	for (i=0; i<old_x_values.length; i++) {
    		x = old_x_values[i];	
    		y = old_y_values[i];
    		
//Correct these values to avoid erors if centre of mask is black
//		corrected_xy = correct_xy(imgTitle, x, y);
//		x = corrected_xy[0];
//		y = corrected_xy[1];

//Get morphology values into array		
    		setSlice(old_frames[i]);
    		morphology_values = get_cell_properties(x, y, imgTitle);

//Get morphology
    		new_areas = Array.concat(new_areas, morphology_values[0]);
    		new_feret = Array.concat(new_feret, morphology_values[1]);
    		new_circs = Array.concat(new_circs, morphology_values[2]);

//Get centre of mass 
    		new_com_x = Array.concat(new_com_x, morphology_values[3]);
    		new_com_y = Array.concat(new_com_y, morphology_values[4]);
	}

setBatchMode(false);

//Reopen saved
	open(dir+"Results.csv");

//Write new combined table once
	number = 0;
	for (i=0; i<nResults; i++) {
    		print(f,
     		number++ + "\t" +
        	getResultString("Image_ID", i) + "\t" + 
        	getResultString("Track", i) + "\t" + 
        	getResult("Seed?", i) + "\t" + 
        	getResult("Frame", i) + "\t" + 
        	getResult("Slice", i) + "\t" + 
        	getResult("Ch", i) + "\t" +
        	new_com_x[i] + "\t" +
        	new_com_y[i] + "\t" +
        	old_x_values[i] + "\t" +
        	old_y_values[i] + "\t" +
        	getResult("Follicle_COMX", i) + "\t" +
        	getResult("Follicle_COMY", i) + "\t" +
        	getResult("Distance_from_COM_(um)", i) + "\t" +
        	getResult("Inside", i) + "\t" +
        	new_areas[i] + "\t" + 
        	new_feret[i] + "\t" + 
        	new_circs[i]); 	
	}

}

macro "Parse to mdf2 Action Tool - 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"
{	
	convert_to_mdf2();
}

macro "Data Operations Menu Tool - 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"
{
	cmd = getArgument();

//Summary stats operation/////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
	if (cmd=="Add Summary Stats"){

//if the results table is empty prompt for a results table - prompt for calibration of image
		Dialog.create("Please set calibration values");
		Dialog.addNumber("Time Step (min):", 10);
		Dialog.addNumber("Scale (um/px):", 0.619);
		Dialog.show();
		time_step = Dialog.getNumber();
		cal = Dialog.getNumber();

		if (isOpen("Results")) {
			basic_summary();
			per_track_summary();
		} 
			else {
				waitForUser("There is no Results table open please select a tracking table or press cancel");
				table = getInfo("window.name");
				selectWindow(table);
				tdir = getDirectory("temp");
				saveAs("Text", tdir+"Results.xls");
				run("Close");
				open(tdir+"Results.xls");
				basic_summary();
				per_track_summary();
			}
	}
	

	else if (cmd=="Align Tracks") {
		
		align_data("Distance_from_COM_(um)");
		align_data("Distance_(um)");
		align_data("Speed_(um/min)");
		align_data("Acc_Dist_(um)");
		align_data("Euclidean_D_(um)");
		align_data("Persistence");
		align_data("Area");
		align_data("Feret");
		align_data("Circ.");
		
	}
	
}

//////////////////////////////////////////////////////////////////////FUCNTIONS HERE//////////////////////////////////////////////////////////////////////

function law_of_cosines(xarray,yarray){
//Function to return the angle from two arrays - angle of interest must be at xarray[0], yarray[0]

//a distances
	xd_a = xarray[0] - xarray[1];
	yd_a = yarray[0] - yarray[1];
	a = (sqrt((xd_a*xd_a)+(yd_a*yd_a)))*cal;//x,y to x1,y1
	euc_dis = a;//check this is always consistent???????????????????????????????

//b distances
	xd_b = xarray[0] - xarray[2];
	yd_b = yarray[0] - yarray[2];
	b = (sqrt((xd_b*xd_b)+(yd_b*yd_b)))*cal;//x,y to x2,y2

//c distances
	xd_c = xarray[1] - xarray[2];
	yd_c = yarray[1] - yarray[2];
	c = (sqrt((xd_c*xd_c)+(yd_c*yd_c)))*cal;//x1,y1 to x2, y2

	if (a == 0){angle=0;} //to avoid NaN error
		else {
			//calculate
			radian = acos(((a*a)+(b*b)-(c*c))/(2*(a*b)));
			angle = radian*(180/PI);
		}
}

function deleteChosenRows(column, tag, column2, class) {
//deletes rows that have "tag" in column unless they have "class" in column 2
//get the column headings in array	
	headings = split(String.getResultsHeadings);

	if (isOpen("Log")) {
		selectWindow("Log");
		run("Close");
	}
	//print to log
	Array.print(headings);

	for (i=0; i<nResults; i++) {
		linevalues = newArray();
		if (getResultString(column, i) == tag && getResultString(column2, i) != class) {
		}
			else {
				for (j=0; j<headings.length; j++) {
					value = getResultString(headings[j], i);
					linevalues = Array.concat(linevalues, value);
				}
				Array.print(linevalues);
			}
	}
	tdir = getDirectory("temp");
	selectWindow("Log");
	saveAs("Text", tdir+"Log.csv");
	open(tdir+"Log.csv");

	if (isOpen("Results")) {
		selectWindow("Results");
		run("Close");
	}
	
	Table.rename("Log.csv", "Results");

	if (isOpen("Log")) {
		selectWindow("Log");
		run("Close");
	}
}

function getClass() {
//determines the starting and finishing position of a track and classifies as "Yes-Yes", "Yes-No", "No-No", "No-Yes"
//is there a results table containing the column heading Inside?

	if (isOpen("Results") && getResultString("Inside?", 0) == "Yes" || getResultString("Inside?", 0) == "No") {

//get the class (e.g. no-yes)
		track_number = list_no_repeats ("Results", "Track");

		for (i=0; i<track_number.length; i++){

			j_values = newArray();
			for (j=0; j<nResults; j++) {

				if (getResultString("Track", j) == toString(track_number[i])){
					j_values = Array.concat(j_values, j);
				}
			}

			//get the class
			tminclass = j_values[0];
			tmaxclass = j_values[j_values.length-1];
			class1 = getResultString("Inside?", tminclass);
			class2 = getResultString("Inside?", tmaxclass);
			class = class1+"-"+class2;

			//write back the class
			for (n=0; n<j_values.length; n++) {
				index = j_values[n];
				setResult("Class", index, class);
			}
		}
	}
}

function myFisherYates(array) {
//randomise an array 

    if(array.length!=0) {
        for (i=0;i<array.length ;i++) {
            j = floor(random()*(i+1));
            temp1 = array[i]; temp2 = array[j];
            array[i] = temp2; array[j] = temp1;
		}
    }
}

function get_skel_xy(image) {
//return an array of x and y positions for the skeleton of a selection

	selectWindow(image);
//check for a selection
	sel = selectionType();
	if (sel == -1 || sel == 10){
		exit("There is no area selection");
	}
		else {
			run("Colors...", "foreground=white background=white selection=cyan");
			getDimensions(width, height, channels, slices, frames);
			newImage("skeleton", "8-bit black", width, height, 1);
			run("Restore Selection");
			run("Cut");
			run("Make Binary");
			run("Skeletonize");
			run("Points from Mask");
			getSelectionCoordinates(xpoints, ypoints);
			if (isOpen("skeleton")) {
				selectWindow("skeleton");
				run("Close");
			}
			selectWindow(image);
			run("Restore Selection");
		}
	}

function get_s_dist(x, y, xvalues, yvalues, cal) {
//get the shortest distance between x,y and the values in xarray, yarray

//check the arrays are the same length
	if (xvalues.length == yvalues.length){
		shortest = 100000;
		for (i=0; i<xvalues.length; i++) {
			dist1 = get_pythagoras(x,y,xvalues[i],yvalues[i],cal);
			if (dist1 < shortest) {
				shortest = dist1;//*cal;
				com_roi_x = xvalues[i];
				com_roi_y = yvalues[i];
			}
		}
	}
	else {
		exit("The arrays are different lengths are these xy coorinates");
	}
}

function get_pythagoras(x, y, x1, y1, scale) {
//get the distance between x,y and x1,y1 in the usual way use scale to convert to real world units
	x2 = x - x1;
	y2 = y - y1;
    distance = (sqrt((x2*x2)+(y2*y2)))*scale;
	return distance;
}

function basic_summary() {
//basic summary of the tracking results into the same results table

//get the track numbers in an array to use as the index
	track_number = list_no_repeats ("Results", "Track");

//get number of tracks (nTracks)
	nTracks = track_number.length;

//get track lengths in array and write to results
	track_lengths = newArray();
	for (a=0; a<track_number.length; a++){
		t_le = 0;
		for (i=0; i<nResults; i++) {
			if (getResultString("Track",i) == toString(track_number[a])) {
				t_le = t_le +1;
			}
		}
		track_lengths = Array.concat(track_lengths, t_le);
	}

	for (a=0; a<track_number.length; a++){
		for (i=0; i<nResults; i++) {
			if (getResultString("Track",i) == toString(track_number[a])) {
				setResult("T_Length", i, track_lengths[a]);
			}
		}
	}

//Calculate distance, accumulated distance, speed, and euclidean distance across each track
//Get the x and y values of the track in question into an array
	for (j=0; j<track_number.length; j++){
		values_x = newArray();
		values_y = newArray();
		for (k=0; k<nResults(); k++) {
			if (getResultString("Track", k) == toString(track_number[j])){
				values_x = Array.concat(values_x, getResult("X", k));
				values_y = Array.concat(values_y, getResult("Y", k));
			}
		}

//Calculate distance through the mitosis instead of resetting from mother to daughter
//Check if the track is a daughter
	trackname = toString(track_number[j]);
	trackappend = substring(trackname,trackname.length-1,trackname.length);
		
//If its a daughter get the mother track x y values	
		if (trackappend == "a" || trackappend == "b") {
			//print("Track is a daughter "+trackname);

			mtrack = substring(trackname,0,trackname.length-1);
			//print("Track mother is "+mtrack);
			mvalues_x = newArray();
		 	mvalues_y = newArray();
		 	m_dist = newArray();
			
			for (k=0; k<nResults(); k++) {			
			if (getResultString("Track", k) == mtrack){
				mvalues_x = Array.concat(mvalues_x, getResult("X", k));
				mvalues_y = Array.concat(mvalues_y, getResult("Y", k));
				m_dist = Array.concat(m_dist, getResult("Acc_Dist_(um)", k));
			}
		}		

//Therefore if the track is a daughter X and Y will be the last entry for the mother track and ex and ey will be the first entry
			x = mvalues_x[mvalues_x.length-1];
			y = mvalues_y[mvalues_y.length-1];
			ex = mvalues_x[0];
			ey = mvalues_y[0];
			mdis = m_dist[m_dist.length-1];
		
		} else {

//Otherwise if the track is a new track X and Y will be the same as the first entry of the new track for both
			x = values_x[0];
			y = values_y[0];
			ex = values_x[0];
			ey = values_y[0];
			mdis = 0;
		}

//Calculate distance, accumulated distance, speed, and euclidean distance for first time point

//Define the arrays
		d_dist = 0;
		dis_d = newArray(0);
		speed = 0;
		speeds = newArray(0);
		acc_dist = newArray(0);
		persistence = newArray(0);
		eucdist = 0;
		euc_d = newArray(0);

//x1 and y1 are the first entries in values_x values_y
		x1 = values_x[0];
		y1 = values_y[0];

//calculate distance speed euclidean distance for the first x y values
		d_dist = get_pythagoras(x,y,x1,y1,cal);
		speed = d_dist/time_step;
		eucdist = get_pythagoras(ex,ey,x1,y1,cal);

//populate the arrays
		dis_d = Array.concat(dis_d, 0); //does not roll through the mitosis
		speeds = Array.concat(speeds, speed); //rolls through the mitosis
		acc_dist = Array.concat(acc_dist, d_dist+mdis); //rolls through the mitosis
		euc_d = Array.concat(euc_d, eucdist); //rolls through the mitosis
		persistence = Array.concat(persistence, (eucdist/(d_dist+mdis))); //rolls through the mitosis
		
//Loop through the rest of the x y values and calculate for the whole track
		d_dist = 0;
		speed = 0;
		pers = 0;
		eucdist = 0;
		
		for (n=1; n<(values_x.length); n++) {			
			x = values_x[n-1];
			y = values_y[n-1];
			x1 = values_x[n];
			y1 = values_y[n];

//calculate the distances			
			d_dist = get_pythagoras(x,y,x1,y1,cal);
			speed = d_dist/time_step;
			eucdist = get_pythagoras(ex,ey,x1,y1,cal);

//populate the arrays				
			dis_d = Array.concat(dis_d, d_dist);
			speeds = Array.concat(speeds, speed);
			prev_dist = acc_dist[n-1];
			acc_dist = Array.concat(acc_dist, (prev_dist+d_dist));
			euc_d = Array.concat(euc_d, eucdist);
			persistence = Array.concat(persistence, eucdist/(prev_dist+d_dist));
		}

//Write the arrays to the Results table		
    	index = -1;
    	for (k=0; k<nResults(); k++) {
    		if (getResultString("Track", k) == toString(track_number[j])) {
    		index = index + 1;
    		setResult("Track_Index", k, index); //020822 time from start of track in minutes
    		setResult("Track_Time", k, index*time_step); //020822 time from start of track in minutes
    		setResult("Track_Index_Rev", k, (((getResult("T_Length",k)-1)-index))); //020822 time from end of track in minutes
    		setResult("Distance_(um)", k, dis_d[index]);
    		setResult("Acc_Dist_(um)", k, acc_dist[index]);
			setResult("Speed_(um/min)", k, speeds[index]);
    		setResult("Euclidean_D_(um)", k, euc_d[index]);
    		setResult("Distance^2_(um)", k, euc_d[index]*euc_d[index]); //180523 squared displacement from euc dist
    		setResult("Persistence", k, persistence[index]);
    		}
    	}    
	}
}

function per_track_summary() {
//summarises each individual track into a new summary table
//draws the summary table
	requires("1.41g");
    title1 = "Summary Table";
    title2 = "["+title1+"]";
    f = title2;

    if (isOpen(title1)) {
    }
    else {
		run("New... ", "name="+title2+" type=Table width=250 height=600");
		print(f, "\\Headings: \tTrack#\tLength (mins)\tAcc. Dist (um)\tEuc. Dist (um)\tPersistence\tAcc. Velocity (um/min)\tEuc. Velocity (um/min)\tClass\tStart Dist. COM (um)\tEnd Dist. COM (um)\tEntry Time (mins)");
    }

//get the track numbers in an array to use as the index
	track_number = list_no_repeats ("Results", "Track");

//get the class
	getClass();

//Array.print(track_number);

//get number of tracks (nTracks)
	nTracks = track_number.length;

//get the accumulated distance euclidean distance for each track into arrays
	euclidean_distances = newArray();
	max_distances = newArray();

	for (i=0; i<track_number.length; i++){
//get the x, y values in an array
		values_x = newArray();
		values_y = newArray();
		for (j=0; j<nResults; j++) {
			if (getResultString("Track", j) == toString(track_number[i])){
				x_val = getResult("X", j);
				values_x = Array.concat(values_x, x_val);
				y_val = getResult("Y", j);
				values_y = Array.concat(values_y, y_val);
			}
		}

//calculate the euclidean distance for track
		final_value=values_x.length-1;
		x = values_x[0];
		y = values_y[0];
		x1 = values_x[final_value];
		y1 = values_y[final_value];
		eucdist = get_pythagoras(x,y,x1,y1,cal);
		euclidean_distances = Array.concat(euclidean_distances, eucdist);
	}

//total distance = max value in Acc. Dist (um)
	total_distance = 0;
	distance = 0;

//get the accumulated distance of each track into an array max_distances
	for (i=0; i<track_number.length; i++){
		acc_dist = newArray();
		for (j=0; j<nResults; j++) {
			if (getResultString("Track", j) == toString(track_number[i])){
				value = getResult("Acc_Dist_(um)", j);
				acc_dist = Array.concat(acc_dist, value);
			}

		}
		Array.getStatistics(acc_dist, min, max, mean, stdDev);
		total_distance = max;
		max_distances = Array.concat(max_distances, total_distance);
	}

//get the track lengths into an array
	track_lengths = newArray();
	var done = false; // used to prematurely terminate loop
	for (i=0; i<track_number.length; i++){
		done = false;
		for (j=0; j<nResults && !done; j++) {
		 	if (getResultString("Track", j) == toString(track_number[i])){
		 		track_lengths = Array.concat(track_lengths, ((getResult("T_Length", j))-1)*time_step);
		 		done = true; // break 
		 	}
		}
	}

//get the classes into an array
	track_class = newArray();
	var done = false; // used to prematurely terminate loop
	for (i=0; i<track_number.length; i++){
		done = false;
		for (j=0; j<nResults && !done; j++) {
		 	if (getResultString("Track", j) == toString(track_number[i])){
		 		t_cl = getResultString("Class", j);
		 		track_class = Array.concat(track_class, t_cl);
		 		done = true; // break 
		 	}
		}
	}

//get initial distance from array for each track
	var done1 = false; // used to prematurely terminate loop
	dist_com = newArray();
	for (i=0; i<track_number.length; i++){
		done1 = false;
		for (j=0; j<nResults && !done1; j++) {
		 	if (getResultString("Track", j) == toString(track_number[i])){
		 		comd = (getResult("Distance_from_COM_(um)", j));//removed calibartion form here as it is now calibrtated 060520
		 		dist_com = Array.concat(dist_com, comd);
		 		done1 = true; // break 
		 	}
		}
	}

//get final distance from array for each track
	end_dist_com = newArray();
	for (i=0; i<track_number.length; i++){
		for (j=0; j<nResults; j++) {
		 	if (getResultString("Track", j) == toString(track_number[i])){
		 		comd = (getResult("Distance_from_COM_(um)", j));//removed calibartion form here as it is now calibrtated 060520
		 	}	 	
		}
		end_dist_com = Array.concat(end_dist_com, comd);
	}


//get the follicle entry time using Inside and class, only generate a time if the class is No-Yes, gives first entry point
//get class first in case not already done


	var done1 = false; // used to prematurely terminate loop
	entry_time = newArray();
	for (i=0; i<track_number.length; i++){
		done1 = false;
		entry = NaN;
		for (j=0; j<nResults && !done1; j++) {
		 	if (getResultString("Track", j) == toString(track_number[i]) && getResultString("Inside?", j) == "Yes" && getResultString("Class", j) == "No-Yes"){
		 		entry = getResult("Frame", j) * time_step;	
		 		done1 = true; // break 
		 	}
		}
		entry_time = Array.concat(entry_time, entry);
	}

//calculate persistence for track as euclidean/accumulated
	track_persistence = newArray();
	for (i=0; i<track_number.length; i++){
		pers_t = euclidean_distances[i] / max_distances[i];
		track_persistence = Array.concat(track_persistence, pers_t);
	}

//calculate track speeds
	track_speed = newArray();
	e_track_speed = newArray();
	for (i=0; i<track_number.length; i++){
		dis = max_distances[i];
		dis2 = euclidean_distances[i];
		tim = track_lengths[i];
		speed = (dis/tim);
		e_speed = (dis2/tim);
		track_speed = Array.concat(track_speed, speed);
		e_track_speed = Array.concat(e_track_speed, e_speed);
	}
	number  = 0;

	for (i=0; i<track_number.length; i++){
//exclude tracks with less than 10 timepoints
		if ((track_lengths[i]/time_step) < 1) {
			print("Track "+track_number[i]+" excluded < 10 steps");
		} 
			else {
				print(f, (number++)+"\t"+toString(track_number[i])+"\t"+(track_lengths[i])+"\t"+(max_distances[i])+"\t"+(euclidean_distances[i])+"\t"+(track_persistence[i])+"\t"+(track_speed[i])+"\t"+(e_track_speed[i])+"\t"+track_class[i]+"\t"+(dist_com[i])+"\t"+(end_dist_com[i])+"\t"+(entry_time[i]));
  			}
	}
}

function list_no_repeats (table, heading) {
//Returns an array of the entries in a column without repeats to use as an index

//Check whether the table exists
	if (isOpen(table)) {

//get the entries in the column without repeats
		no_repeats = newArray(getResultString(heading, 0));

		for (i=0; i<nResults; i++) {
			occurence = getResultString(heading, i);
			for (j=0; j<no_repeats.length; j++) {
				if (occurence != no_repeats[j]) {
					flag = 0;
				} else {
						flag = 1;
					}
				}
			
			if (flag == 0) {
				occurence = getResultString(heading, i);
				no_repeats = Array.concat(no_repeats, occurence);	
			}
		}
	} else {
		Dialog.createNonBlocking("Error");
		Dialog.addMessage("No table with the title "+table+" found.");
		Dialog.show();
	}
	return no_repeats;
}

function list_no_repeats_filter (table, heading, filter, boolean) {
//returns and array of the entries in a column wihtour repeats filtered by the contents of anothee column

//check whetehr the table exists
	if (isOpen(table)) {
//no_repeats must contain the first entry
	no_repeats = newArray();
	for (i=0; i<nResults; i++) {
		if (getResult(filter, i)==boolean) {
			no_repeats = Array.concat(no_repeats,getResultString(heading,i));
			i = nResults;
		}
	}

	for (i=0; i<nResults; i++) {
		if(getResult(filter, i)==boolean) {
			occurence = getResultString(heading,i);
			for (j=0; j<no_repeats.length; j++) {
				if (occurence != no_repeats[j]) {
					flag = 0;
				} else {
						flag = 1;
					}
				}
			
			if (flag == 0) {
				occurence = getResultString(heading, i);
				no_repeats = Array.concat(no_repeats, occurence);	
			}
		}
	}
	} else {
		Dialog.createNonBlocking("Error");
		Dialog.addMessage("No table with the title "+table+" found.");
		Dialog.show();
	}
	return no_repeats;
}

function align_data(column) {
//get the seed track numbers
	seed_tracks = list_no_repeats_filter("Results", "Track", "Seed", 1);

	s_length = 0;
//get the length of the longest track
	for (i=0; i<nResults; i++) {
		if ((getResult("Seed",i) == 1) && (getResult("T_Length",i)>s_length)) {
			s_length = getResult("T_Length",i);
		}
	}

print("Seed tracks aligned for "+column);
//write each track to the log preceeded by zero entries upto slength
	for (i=0; i<seed_tracks.length; i++) {
		s_array = newArray();
		for (j=0; j<nResults; j++) {
			if (getResultString("Track", j) == toString(seed_tracks[i])) {
				s_array = Array.concat(s_array, (getResult(column,j)));
			}
		}
		add_zero = s_length - s_array.length;	
		for (k=0; k<add_zero; k++) {
			s_array = Array.concat("", s_array);
		}
		Array.print(s_array);
	}

//get the daughter track numbers
	daughter_tracks = list_no_repeats_filter("Results", "Track", "Seed", 0);
	d_length = 0;
//get the length of the longest track
	for (i=0; i<nResults; i++) {
		if ((getResult("Seed",i) == 0) && (getResult("T_Length",i)>d_length)) {
			d_length = getResult("T_Length",i);
		}
	}
	print("Daughter tracks aligned for "+column);

//write each track to the log followed by zero entries upto dlength
	for (i=0; i<daughter_tracks.length; i++) {
		d_array = newArray();
		for (j=0; j<nResults; j++) {
			if (getResultString("Track", j) == toString(daughter_tracks[i])) {
				d_array = Array.concat(d_array, (getResult(column,j)));
			}
		}
		add_zero = d_length - d_array.length;
		for (k=0; k<add_zero; k++) {
			d_array = Array.concat(d_array, "");
		}
		Array.print(d_array);
	}
}


function get_cell_properties(x, y, imgTitle) {
    // Duplicate 
    run("Select None");
    run("Duplicate...", "title=duplicate");

    // Convert to binary
    run("Auto Threshold", "method=Default white stack");
    run("BinaryFilterReconstruct ", "erosions=1 white"); 

    // Set all needed measurements
    run("Set Measurements...", "area feret's shape center redirect=None decimal=4");

    // Select ROI
    doWand(x, y);

    // Clear Results silently (avoid accumulation)
    if (isOpen("Results")) {
        selectWindow("Results");
        run("Clear Results");
    }

    // Measure
    run("Measure");

    // Grab values
    area  = getResult("Area", 0);
    feret = getResult("Feret", 0);
    circ  = getResult("Circ.", 0);
    com_x = getResult("XM", 0);
    com_y = getResult("YM", 0);
    
    if (area > 5000) {
    	corrected_xy = correct_xy(imgTitle, x, y);
		x = corrected_xy[0];
		y = corrected_xy[1];
		
		// Select ROI
    doWand(x, y);

    // Clear Results silently (avoid accumulation)
    if (isOpen("Results")) {
        selectWindow("Results");
        run("Clear Results");
    }

    // Measure
    run("Measure");

    // Grab values
    area  = getResult("Area", 0);
    feret = getResult("Feret", 0);
    circ  = getResult("Circ.", 0);
    com_x = getResult("XM", 0);
    com_y = getResult("YM", 0);
    }
	
	if (area > 5000) {
	area  = "NaN";
    feret = "NaN";
    circ  = "NaN";
    com_x = "NaN";
    com_y = "NaN";
	 }
	 
    // Clean up
    close();
    run("Select None");

    return newArray(area, feret, circ, com_x, com_y);
}

function convert_to_mdf2(){

//get the track numbers in an array to use as the index
	track_number = list_no_repeats ("Results", "Track");
	mothers_and_daughters = newArray();
	
	for (i = 0; i < track_number.length; i++) {
		track_string = track_number[i];
		len = track_string.length;
		key = substring(track_string,len-1);
	
		if (key == "a" || key== "b") {
			mothers_and_daughters = Array.concat(mothers_and_daughters,0);
			} else {
			mothers_and_daughters = Array.concat(mothers_and_daughters,1);
			}
	}
	
//close the log
	if (isOpen("Log")) {
		selectWindow("Log");
		run("Close");
	}
	
	print("MTrackJ 1.2.0 Data File");
	print("Assembly 1");

//write the mothers to cluster 1

	print("Cluster 1 (Seeds)");

	for (i=0; i<track_number.length; i++){
		if (mothers_and_daughters[i]==1) {
			print("Track "+i+1);
		}
		count=0;
		for (j=0; j<nResults; j++) {
			
			if ((getResultString("Track", j) == track_number[i])&&(getResult("Seed?", j)==1)){
				count = count+1;

				x = getResult("X", j);
				y = getResult("Y", j);
				z =	1;
				t = getResult("Frame", j);
				c = 1;
				ch1 = getResult("Ch1_Mean", j);
				ch2 = getResult("Ch2_Mean", j);
				ch3 = getResult("Ch3_Mean", j);
				ch4 = getResult("Ch4_Mean", j);
				ch5 = getResult("Ch5_Mean", j);
						
				print("Point "+count+" "+x+" "+y+" "+z+" "+t+" "+c+" "+ch1+" "+ch2+" "+ch3+" "+ch4);
				}
			}
		}
		
//write the daughters to cluster 2

	print("Cluster 2 (Progeny)");

	for (i=0; i<track_number.length; i++){
		if (mothers_and_daughters[i]==0) {
			print("Track "+i+1);
		}
		count=0;
		for (j=0; j<nResults; j++) {
		
			if ((getResultString("Track", j) == track_number[i])&&(getResult("Seed?", j)==0)){
				count = count+1;

				x = getResult("X", j);
				y = getResult("Y", j);
				z =	1;
				t = getResult("Frame", j);
				c = 1;
				ch1 = getResult("Ch1_Mean", j);
				ch2 = getResult("Ch2_Mean", j);
				ch3 = getResult("Ch3_Mean", j);
				ch4 = getResult("Ch4_Mean", j);
				ch5 = getResult("Ch5_Mean", j);
			
				print("Point "+count+" "+x+" "+y+" "+z+" "+t+" "+c+" "+ch1+" "+ch2+" "+ch3+" "+ch4);
				}
			}
		}
		
	print("End of MTrackJ Data File");
}

function correct_xy(imgTitle, x, y) {
	
	//make roi
	selectWindow(imgTitle);
	drawOval(x,y,20,20);
	getRawStatistics(nPixels, mean, min, max);
	run("Find Maxima...", "noise="+max+" output=[Point Selection]");
    	
    	// Get coordinates of maxima point selection
    	getSelectionBounds(x, y, w, h);

    	// Return corrected coordinates
    	corrected_xy = newArray(x, y);
    	return corrected_xy;
}



//Icons used courtesy of: http://www.famfamfam.com/lab/icons/silk/
//https://github.com/markjames/famfamfam-silk-icons
